---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title Coroutines
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/Users/Daniel/Documents/GitHub/osweb/example-experiments"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="That's it! You've reached the end." x=0 y=0 z_index=0

define coroutines Introslides
	set function_name ""
	set flush_keyboard yes
	set end_after_item keyboard
	set duration 10000
	set description "Run items simultaneously"
	run slide1 end=0 runif=always start=0
	run slide2 end=2000 runif=always start=2000
	run slide3 end=4000 runif=always start=4000
	run slide4 end=6000 runif=always start=6000
	run keyboard end=10000 runif=always start=0

define feedback Performance
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt] ms.<br /><br />[acc]% of your responses were correct" x=0 y=0 z_index=0

define loop Trials
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 duration 100
	setcycle 0 image "natural1.jpg"
	setcycle 0 type natural
	setcycle 0 correct_response z
	setcycle 1 duration 250
	setcycle 1 image "natural1.jpg"
	setcycle 1 type natural
	setcycle 1 correct_response z
	setcycle 2 duration 500
	setcycle 2 image "natural1.jpg"
	setcycle 2 type natural
	setcycle 2 correct_response z
	setcycle 3 duration 100
	setcycle 3 image "natural2.jpg"
	setcycle 3 type natural
	setcycle 3 correct_response z
	setcycle 4 duration 250
	setcycle 4 image "natural2.jpg"
	setcycle 4 type natural
	setcycle 4 correct_response z
	setcycle 5 duration 500
	setcycle 5 image "natural2.jpg"
	setcycle 5 type natural
	setcycle 5 correct_response z
	setcycle 6 duration 100
	setcycle 6 image "natural3.jpg"
	setcycle 6 type natural
	setcycle 6 correct_response z
	setcycle 7 duration 250
	setcycle 7 image "natural3.jpg"
	setcycle 7 type natural
	setcycle 7 correct_response z
	setcycle 8 duration 500
	setcycle 8 image "natural3.jpg"
	setcycle 8 type natural
	setcycle 8 correct_response z
	setcycle 9 duration 100
	setcycle 9 image "natural4.jpg"
	setcycle 9 type natural
	setcycle 9 correct_response z
	setcycle 10 duration 250
	setcycle 10 image "natural4.jpg"
	setcycle 10 type natural
	setcycle 10 correct_response z
	setcycle 11 duration 500
	setcycle 11 image "natural4.jpg"
	setcycle 11 type natural
	setcycle 11 correct_response z
	setcycle 12 duration 100
	setcycle 12 image "natural5.jpg"
	setcycle 12 type natural
	setcycle 12 correct_response z
	setcycle 13 duration 250
	setcycle 13 image "natural5.jpg"
	setcycle 13 type natural
	setcycle 13 correct_response z
	setcycle 14 duration 500
	setcycle 14 image "natural5.jpg"
	setcycle 14 type natural
	setcycle 14 correct_response z
	setcycle 15 duration 100
	setcycle 15 image "object1.jpg"
	setcycle 15 type object
	setcycle 15 correct_response m
	setcycle 16 duration 250
	setcycle 16 image "object1.jpg"
	setcycle 16 type object
	setcycle 16 correct_response m
	setcycle 17 duration 500
	setcycle 17 image "object1.jpg"
	setcycle 17 type object
	setcycle 17 correct_response m
	setcycle 18 duration 100
	setcycle 18 image "object2.jpg"
	setcycle 18 type object
	setcycle 18 correct_response m
	setcycle 19 duration 250
	setcycle 19 image "object2.jpg"
	setcycle 19 type object
	setcycle 19 correct_response m
	setcycle 20 duration 500
	setcycle 20 image "object2.jpg"
	setcycle 20 type object
	setcycle 20 correct_response m
	setcycle 21 duration 100
	setcycle 21 image "object3.jpg"
	setcycle 21 type object
	setcycle 21 correct_response m
	setcycle 22 duration 250
	setcycle 22 image "object3.jpg"
	setcycle 22 type object
	setcycle 22 correct_response m
	setcycle 23 duration 500
	setcycle 23 image "object3.jpg"
	setcycle 23 type object
	setcycle 23 correct_response m
	setcycle 24 duration 100
	setcycle 24 image "object4.jpg"
	setcycle 24 type object
	setcycle 24 correct_response m
	setcycle 25 duration 250
	setcycle 25 image "object4.jpg"
	setcycle 25 type object
	setcycle 25 correct_response m
	setcycle 26 duration 500
	setcycle 26 image "object4.jpg"
	setcycle 26 type object
	setcycle 26 correct_response m
	setcycle 27 duration 100
	setcycle 27 image "object5.jpg"
	setcycle 27 type object
	setcycle 27 correct_response m
	setcycle 28 duration 250
	setcycle 28 image "object5.jpg"
	setcycle 28 type object
	setcycle 28 correct_response m
	setcycle 29 duration 500
	setcycle 29 image "object5.jpg"
	setcycle 29 type object
	setcycle 29 correct_response m
	run trial_sequence

define sketchpad blank
	set duration keypress
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run Introslides always
	run Trials always
	run Performance always
	run End always

define coroutines expflow
	set function_name ""
	set flush_keyboard yes
	set end_after_item trial_response
	set duration 5000
	set description "Run items simultaneously"
	run fixation end=0 runif=always start=0
	run image end=1000 runif=always start=1000
	run mask end="[=var.duration + 1000]" runif=always start="[=var.duration + 1000]"
	run blank end="[=var.duration + 2000]" runif=always start="[=var.duration + 2000]"
	run trial_response end=5000 runif=always start=0

define feedback feedback
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw fixdot color=green show_if="[correct] = 1" style=default x=0 y=0 z_index=0
	draw fixdot color=red show_if="[correct] = 0" style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Acc: [acc]%" x=0.0 y=64.0 z_index=0

define sketchpad fixation
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad image
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response keyboard
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad mask
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Noise.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad slide1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You are going to see an image that is presented very briefly." x=0 y=0 z_index=0

define sketchpad slide2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The image is directly followed by a mask." x=0 y=0 z_index=0

define sketchpad slide3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The image either depicts a natural scene, or an object." x=0 y=0 z_index=0

define sketchpad slide4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press <b>'z'</b> if the image contains a <b>natural scene</b><br />Press <b>'m'</b> if the image contains an <b>object</b>" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press space to start." x=0 y=32 z_index=0

define keyboard_response trial_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expflow always
	run feedback always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Welcome<br />" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="After pressing space on this screen,<br />the instructions will cycle forward automatically.<br />You can skip them at any time by pressing space again." x=0 y=0 z_index=0

