---
API: 2
OpenSesame: 3.1.2
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/daniel/Sites/osweb/test-osexp"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sampler correct_sound
	set volume 1
	set stop_after 0
	set sample "0863.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define feedback eval_dot
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw fixdot color="#05ff00" show_if="[correct] = 1" style=default x=0 y=0 z_index=0
	draw fixdot color="#ff000b" show_if="[correct] = 0" style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run sound_test always
	run welcome always
	run trials always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "0477.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define logger log
	set description "Logs experimental data"
	set auto_log yes

define sketchpad prank
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome subject zero..." x=0 y=0 z_index=0

define sketchpad press_for_next
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="GO!" x=0 y=0 z_index=0

define keyboard_response resp
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define sampler sound_test
	set volume 1
	set stop_after 0
	set sample "0564.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad stim
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="Myriad Pro" font_italic=no font_size=25 html=yes show_if=always text="[stim]" x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stim always
	run resp always
	run log always
	run correct_sound "[correct] = 1"
	run incorrect_sound "[correct] = 0"
	run eval_dot always
	run press_for_next always

define loop trials
	set source_file ""
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim RIGHT
	setcycle 0 correct_response right
	setcycle 1 stim LEFT
	setcycle 1 correct_response left
	run trial_sequence

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=26 html=yes show_if=always text="<h2>This is an OS Web test experiment</h2><br/> It tests if conditional statements in the 'run-if' boxes work. <br/>Press they arrow key that is indicated on the screen. <br/>If you press the wrong direction, <br/>you should hear a different sound than when you press the right direction.<br/>You should also see a red fixation dot after a wrong response, <br/>and a green after a right one." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=26 html=yes show_if=always text="[subject_nr]" x=0 y=256 z_index=0

