---
API: 2
OpenSesame: 3.1.4
Platform: nt
---
set width 800
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 600
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi yes
set background black

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical experiment.
	It consists of a practice phase, followed by an experimental phase. For more
	information, please visit <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order "stimuli_image;response_correct"
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli_image "rood1.jpg"
	setcycle 0 response_correct 1
	setcycle 1 stimuli_image "rood2.jpg"
	setcycle 1 response_correct 9
	setcycle 2 stimuli_image "rood3.jpg"
	setcycle 2 response_correct 9
	setcycle 3 stimuli_image "rood4.jpg"
	setcycle 3 response_correct 9
	setcycle 4 stimuli_image "blauw1.jpg"
	setcycle 4 response_correct 1
	setcycle 5 stimuli_image "blauw2.jpg"
	setcycle 5 response_correct 9
	setcycle 6 stimuli_image "blauw3.jpg"
	setcycle 6 response_correct 9
	setcycle 7 stimuli_image "blauw4.jpg"
	setcycle 7 response_correct 9
	setcycle 8 stimuli_image "groen1.jpg"
	setcycle 8 response_correct 1
	setcycle 9 stimuli_image "groen2.jpg"
	setcycle 9 response_correct 9
	setcycle 10 stimuli_image "groen3.jpg"
	setcycle 10 response_correct 9
	setcycle 11 stimuli_image "groen4.jpg"
	setcycle 11 response_correct 9
	setcycle 12 stimuli_image "geel1.jpg"
	setcycle 12 response_correct 1
	setcycle 13 stimuli_image "geel2.jpg"
	setcycle 13 response_correct 9
	setcycle 14 stimuli_image "geel3.jpg"
	setcycle 14 response_correct 9
	setcycle 15 stimuli_image "geel4.jpg"
	setcycle 15 response_correct 9
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run block_loop always
	run feedback always

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run about_this_template always
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order "practice;trials"
	set break_if_on_first yes
	set break_if never
	setcycle 0 trials 16
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt] ms" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=256 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=no show_if=always text="A small example of the stroop task." x=0 y=-160 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=no show_if=always text="Press 1 if the color match the word" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=Arial font_italic=no font_size=18 html=yes show_if=always text="" x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=no show_if=always text="Press 9 if the color does not match the word" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=no show_if=always text="First a few examples to practisch" x=0 y=64 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=Arial font_italic=no font_size=18 html=no show_if=always text="Please press a key" x=0 y=192 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[response_correct]"
	set allowed_responses "1;9"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order "practice;trials"
	set break_if_on_first yes
	set break_if never
	setcycle 0 trials 4
	setcycle 0 practice yes
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad sketchpad
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[stimuli_image]" scale=1 show_if=always x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run sketchpad always
	run keyboard_response always
	run logger always

